PsychoPy2experiment version="2022.2.4"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Experiment info = {u'session': u'001', u'participant': u''}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1366, 768]
  expName = animal_detection_pic1
  keyboardBackend = ioHub
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Routines
  Routine trial
    StaticComponent ISI
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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    KeyboardComponent key_resp_2
      allowedKeys = 'y','n'
      correctAns = $ANS
      forceEndRoutine = True
      startVal [time (s)] = 1.2
      storeCorrect = True
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    ImageComponent image
      image [set every repeat] = $FILE
      size = [512, 512]
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.2
      units = pix
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = animal_detection_pic1.csv
    loopType = random
    nReps = 1
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    conditions:
      [{'FILE': 'T01.jpg', 'ANS': 'y'},
      {'FILE': 'T02.jpg', 'ANS': 'y'},
      {'FILE': 'T03.jpg', 'ANS': 'y'},
      {'FILE': 'D01.jpg', 'ANS': 'n'},
      {'FILE': 'D02.jpg', 'ANS': 'n'},
      {'FILE': 'D03.jpg', 'ANS': 'n'}]
    Routine trial
  LoopTerminator trials
